proc par_save_stimulation_locations_PCrec(){  local src,trg,j,fctr,nodeid localobj vfilePC
	//writing only in txt format!
	//save stimulation (apical) synaptic locations
	//save in the same file for enhanced reading performance by MATLAB:
	vfilePC = new File()	
	sprint(vfilePC_filename,"%s/pid_stim_pyramidal_%03d.txt", $s1,PC.id) 
	vfilePC.wopen(vfilePC_filename)
	fh = vfilePC.isopen()
	fctr = 0
	if(PARALLEL) {
		nodeid = PC.id
	}else{
		nodeid = 0
	}
	while (!fh) {
		vfilePC.wopen(vfilePC_filename)
		fh = vfilePC.isopen()
		fctr = fctr + 1
	}
	if(fctr>0){print "@ ",nodeid ," File ",vfilePC_filename," opened after ",fctr, " attempts!"}
	//save all src/trg pairs of this node:
	for trg=0, nPCcells-1{
		if(object_id(stimpidPC2PC[trg])!= 0){
			vfilePC.printf("trg=%d\n",trg)	
			stimpidPC2PC[trg].printf(vfilePC,"%8.4f\n")
		}
	}
	vfilePC.close()
}
