// This function is used to balance the membrane potential to v_init (= -70 mV)
// written by Yiota Poirazi, July 2001, poirazi@LNC.usc.edu

proc current_balance() {
	//Do not call finitialize with v_init argument, because it sets it in all cells
	// created up to this point!
	  finitialize()
	  fcurrent()	
	  //printf("Balancing each PYRAMIDAL compartment to %d mV\n", $1)
	  forsec PCcell_list {
	    	for (x) {
	    		if (ismembrane("na_ion")) {e_pas(x)=v(x)+ina(x)/g_pas(x)} 
	   		if (ismembrane("k_ion")) {e_pas(x)=e_pas(x)+ik(x)/g_pas(x)} 
	    		if (ismembrane("ca_ion")) {e_pas(x)=e_pas(x)+ica(x)/g_pas(x)}
	      	        if (ismembrane("in_ion")) {e_pas(x)=e_pas(x)+in(x)/g_pas(x)} //ican
	       		if (ismembrane("h")) {e_pas(x)=e_pas(x)+ihi(x)/g_pas(x)}
	      	
			fcurrent()
	   		}
		}
	/*finitialize(v_init)*/
	fcurrent()
	      	if (cv.active()) {
	        	cv.re_init()
	        }       else {
	        	fcurrent()
	        }
	frecord_init()
}
